PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MET
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Routines
  Routine Break
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0 or trials.thisN % 10 !=0:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Take a break press space to continue 
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    KeyboardComponent break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine EmRtrial
    ImageComponent Emo_image
      image [set every repeat] = $Main_images
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent Em_key_resp
      allowedKeys = '1','2','3','4'
      correctAns = $Correct_buttonpress
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent Em_first_text
      letterHeight = 0.04
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Em_first
    TextComponent Em_second_text
      letterHeight = 0.04
      pos = (-0.2, -0.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Em_second
    TextComponent Em_third_text
      letterHeight = 0.04
      pos = (0.2, -0.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Em_third
    TextComponent Em_fourth_text
      letterHeight = 0.04
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Em_fourth
  Routine EmpathyTrial
    CodeComponent Force_Resp_code
      Code Type = Auto->JS
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      Each Frame:
        if Empathy_slider.getRating() != None:
              if 'space' in Empa_Next_key_resp.keys:
                  continueRoutine=False
    ImageComponent image
      image [set every repeat] = $Main_images
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent EmpathyQ
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = How much do you emphasize with this person?
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    SliderComponent Empathy_slider
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      pos = (0, -0.35)
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    KeyboardComponent Empa_Next_key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent EmpInfo_text
      letterHeight = 0.02
      pos = (0, -0.47)
      startVal [time (s)] = 0.0
      text = (Mouse click to select response and press space to continue)
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  Routine Break_Emp
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if Empa_trials.thisN == 0 or Empa_trials.thisN % 10 !=0:
            continueRoutine = False
    TextComponent Break_Emp_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Break
        Space to continue
    KeyboardComponent break_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Break_Emo
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if Emo_trials.thisN == 0 or Emo_trials.thisN % 10 != 0:
            continueRoutine = False
    TextComponent Emo_break_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Break
        Space to continue
    KeyboardComponent EmoBreak_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Break_Emp_2
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if Emo_trials.thisN == 0 or Emo_trials.thisN % 10 != 0:
            continueRoutine = False
    TextComponent Emo_break_text_2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Break
        Space to continue
    KeyboardComponent EmoBreak_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Thanks
    TextComponent Thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank You!
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  Routine Instructions
    TextComponent Instructions_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Welcome
        Emotiont reconition task - press corresponding number on keybord
        Empthy - mouse click answere on slider and continue with space
         Space to start
    KeyboardComponent Instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  LoopInitiator Emo_trials loopType="TrialHandler"
    conditionsFile = Main_condition_Emo.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Main_images', 'Dobby_1.jpg'), ('Em_first', '1. satisfied'), ('Em_second', '2. triumphant'), ('Em_third', '3. relieved'), ('Em_fourth', '4. surprised'), ('Correct_buttonpress', 1), ('Correct_Em', 'satisfied')]),
      OrderedDict([('Main_images', 'Dobby_2.jpg'), ('Em_first', '1. amused'), ('Em_second', '2. grateful'), ('Em_third', '3. interested'), ('Em_fourth', '4. satisfied'), ('Correct_buttonpress', 2), ('Correct_Em', 'grateful')]),
      OrderedDict([('Main_images', 'Dobby_3.jpg'), ('Em_first', '1. embarrassed'), ('Em_second', '2. disgusted'), ('Em_third', '3. dejected'), ('Em_fourth', '4. despaired'), ('Correct_buttonpress', 3), ('Correct_Em', 'dejected')]),
      OrderedDict([('Main_images', 'Dobby_4.jpg'), ('Em_first', '1. satisfied'), ('Em_second', '2. charmed'), ('Em_third', '3. relieved'), ('Em_fourth', '4. victorious'), ('Correct_buttonpress', 4), ('Correct_Em', 'victorious')]),
      OrderedDict([('Main_images', 'Dobby_5.jpg'), ('Em_first', '1. relaxed'), ('Em_second', '2. pleased'), ('Em_third', '3. grateful'), ('Em_fourth', '4. liberated'), ('Correct_buttonpress', 1), ('Correct_Em', 'relaxed')]),
      OrderedDict([('Main_images', 'Dobby_6.jpg'), ('Em_first', '1. bothered'), ('Em_second', '2. stunned'), ('Em_third', '3. embarassed'), ('Em_fourth', '4. astonished'), ('Correct_buttonpress', 2), ('Correct_Em', 'stunned')])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
    Routine EmRtrial
    Routine Break_Emo
  LoopTerminator Emo_trials
  LoopInitiator Empa_trials loopType="TrialHandler"
    conditionsFile = Main_condition_Emo.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Main_images', '09_reformatted.jpg'), ('Em_first', '1. satisfied'), ('Em_second', '2. triumphant'), ('Em_third', '3. relieved'), ('Em_fourth', '4. surprised'), ('Correct_buttonpress', 1), ('Correct_Em', 'satisfied')]),
      OrderedDict([('Main_images', '10_reformatted.jpg'), ('Em_first', '1. amused'), ('Em_second', '2. grateful'), ('Em_third', '3. interested'), ('Em_fourth', '4. satisfied'), ('Correct_buttonpress', 2), ('Correct_Em', 'grateful')]),
      OrderedDict([('Main_images', '18_reformatted.jpg'), ('Em_first', '1. embarrassed'), ('Em_second', '2. disgusted'), ('Em_third', '3. dejected'), ('Em_fourth', '4. despaired'), ('Correct_buttonpress', 3), ('Correct_Em', 'dejected')]),
      OrderedDict([('Main_images', '21_reformatted.jpg'), ('Em_first', '1. satisfied'), ('Em_second', '2. charmed'), ('Em_third', '3. relieved'), ('Em_fourth', '4. victorious'), ('Correct_buttonpress', 4), ('Correct_Em', 'victorious')]),
      OrderedDict([('Main_images', '23_reformatted.jpg'), ('Em_first', '1. relaxed'), ('Em_second', '2. pleased'), ('Em_third', '3. grateful'), ('Em_fourth', '4. liberated'), ('Correct_buttonpress', 1), ('Correct_Em', 'relaxed')]),
      OrderedDict([('Main_images', '24_reformatted.jpg'), ('Em_first', '1. bothered'), ('Em_second', '2. stunned'), ('Em_third', '3. embarassed'), ('Em_fourth', '4. astonished'), ('Correct_buttonpress', 2), ('Correct_Em', 'stunned')])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
    Routine EmpathyTrial
    Routine Break_Emp
  LoopTerminator Empa_trials
  Routine Thanks
